opentrons/protocol-designer 8.4.4
schemaVersion: 8
protocolName: 062325 2 Joy RTPCR TVasse 6samps
author: Tyler Vasse
robot: {model: OT-2 Standard, deckId: ot2_standard}
pipettes:
  p300_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labware:
  Opentrons OT-2 96 Filter Tip Rack 200 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_200ul/1, location: 9}
  Opentrons OT-2 96 Filter Tip Rack 20 µL: {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 8}
  Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap: {labwareDefURI: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, location: 5}
  Individual PCR Tubes 96 Well Plate 200 µL: {labwareDefURI: custom_beta/individualpcrtubes_96_wellplate_200ul/1, location: 1}
  Opentrons 24 Tube Rack with 1.5mL Tall Tubes: {labwareDefURI: custom_beta/opentrons_24_tall_tubes/1, location: 4}
  Bio-Rad 96 Well Plate 200 µL PCR: {labwareDefURI: opentrons/biorad_96_wellplate_200ul_pcr/2, location: 2}
  Opentrons OT-2 96 Filter Tip Rack 20 µL (1): {labwareDefURI: opentrons/opentrons_96_filtertiprack_20ul/1, location: 7}
trashBinLocationUpdate:
  trashBin: cutout12
pipetteTiprackAssignments:
  p300_single_gen2: [opentrons/opentrons_96_filtertiprack_200ul/1]
  p20_single_gen2: [opentrons/opentrons_96_filtertiprack_20ul/1]
ingredients:
  - 5x miRCURY
  - PCR Grade Water
  - 10x miRCURY
  - Uni-Sp6
  - miRNA 100uM
  - 2x miRCURY
  - U6 primer mix
  - primer mix 2
  - Sample
  - gDNA Wipeout Buffer 7x
  - Quantiscript Reverse Transcriptase
  - RT Buffer
  - RT Primer Mix
  - 2x QuantiNOVA SYBR Green PCR MM
  - Forward Primer
  - Reverse Primer
  - cDNA RT Product
  - Proprietary Primers
  - IDT primers
ingredLocations:
  Opentrons 24 Tube Rack with 1.5mL Tall Tubes:
    Proprietary Primers {volume: 1000}: B1, B2
    PCR Grade Water {volume: 900}: A2
    IDT primers {volume: 1000}: B3
    2x QuantiNOVA SYBR Green PCR MM {volume: 1000}: A6
  Individual PCR Tubes 96 Well Plate 200 µL:
    cDNA RT Product {volume: 20}: D1-D6
savedStepForms:
- stepType: moveLiquid
  stepName: 240uL 2x SYBR Green MM
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 240
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A6
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  aspirate_flowRate: 77
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A3-A5
  dispense_flowRate: 200
  dispense_mmFromBottom: 3
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 48uL Proprietary Forward Primer
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 48
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: B1, B2
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  aspirate_flowRate: 46.4
  aspirate_mmFromBottom: 3
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A3, A4
  dispense_flowRate: 46.4
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 40
  dispense_mmFromBottom: 3
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 2.8uL of 100uM Forward Primer
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 2.8
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: B3
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  aspirate_flowRate: 10
  aspirate_mmFromBottom: 2
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A5
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 10
  dispense_mmFromBottom: 3
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 168uL RNAse Free H2O
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 168
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A2
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A3, A4
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 100
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_flowRate: 46.43
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 206.8uL RNAse Free H2O
  pipette: p300_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_200ul/1
  volume: 206.8
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with 1.5mL Tall Tubes
  aspirate_wells: A2
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  aspirate_flowRate: 100
  aspirate_mmFromBottom: 2.5
  dispense_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  dispense_wells: A5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 100
  dispense_mmFromBottom: 3
  blowout_checkbox: true
  blowout_flowRate: 46.43
  blowout_location: dest_well
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 19uL PCR 1 MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A3
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  aspirate_flowRate: 12
  aspirate_mmFromBottom: 1.5
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-F1, A2-F2, A3-F3
  dispense_flowRate: 12
  dispense_mmFromBottom: 1
  blowout_checkbox: true
  blowout_flowRate: 15
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 19uL PCR 2 MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A4
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  aspirate_flowRate: 12
  aspirate_mmFromBottom: 1.5
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A4-F4, A5-F5, A6-F6
  dispense_flowRate: 12
  dispense_mmFromBottom: 1
  blowout_checkbox: true
  blowout_flowRate: 15
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 19uL PCR 3 MM
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 19
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap
  aspirate_wells: A5
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  aspirate_flowRate: 12
  aspirate_mmFromBottom: 1.5
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A7-F7, A8-F8, A9-F9
  dispense_flowRate: 12
  dispense_mmFromBottom: 1
  blowout_checkbox: true
  blowout_flowRate: 15
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D1
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  aspirate_flowRate: 6
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: A1-A9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D2
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  aspirate_flowRate: 6
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: B1-B9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D3
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  aspirate_flowRate: 6
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: C1-C9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1uL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D4
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  aspirate_flowRate: 6
  aspirate_mmFromBottom: 1
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: D1-D9
  dispense_flowRate: 10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 8
  dispense_mmFromBottom: 0.2
  blowout_checkbox: true
  blowout_flowRate: 3.78
  blowout_location: dest_well
  blowout_z_offset: -5
  dropTip_location: trashBin
  preWetTip: true
- stepType: moveLiquid
  stepName: 1UL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D5
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  aspirate_flowRate: 3.7
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: E1-E9
  dropTip_location: trashBin
- stepType: moveLiquid
  stepName: 1UL cDNA Samps
  pipette: p20_single_gen2
  tipRack: opentrons/opentrons_96_filtertiprack_20ul/1
  volume: 1
  path: single
  changeTip: always
  aspirate_labware: Individual PCR Tubes 96 Well Plate 200 µL
  aspirate_wells: D6
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  aspirate_flowRate: 3.7
  dispense_labware: Bio-Rad 96 Well Plate 200 µL PCR
  dispense_wells: F1-F9
  dropTip_location: trashBin
labwareDefinitions:
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  custom_beta/individualpcrtubes_96_wellplate_200ul/1:
    brand: {brand: Individual PCR Tubes, brandId: []}
    metadata: {displayName: Individual PCR Tubes 96 Well Plate 200 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 21.06}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: individualpcrtubes_96_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 20, totalLiquidVolume: 200, shape: circular, diameter: 5.46, x: 14.38, y: 74.24, z: 1.06}
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  custom_beta/opentrons_24_tall_tubes/1:
    brand: {brand: Opentrons, brandId: []}
    metadata: {displayName: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 45}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: opentrons_24_tall_tubes}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 44, totalLiquidVolume: 1500, shape: circular, diameter: 8, x: 18.21, y: 75.43, z: 1}
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons OT-2 96 Filter Tip Rack 200 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 200, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A6, wellLocation: {origin: bottom, offset: {z: 2.5, x: 0, y: 0}}, flowRate: 77}
- dispense: {pipetteId: p300_single_gen2, volume: 200, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A6, wellLocation: {origin: bottom, offset: {z: 2.5, x: 0, y: 0}}, flowRate: 200}
- aspirate: {pipetteId: p300_single_gen2, volume: 200, labwareId: Opentrons 24 Tube Rack with 1.5mL Tall Tubes, wellName: A6, wellLocation: {origin: bottom, offset: {z: 2.5, x: 0, y: 0}}, flowRate: 77}
- dispense: {pipetteId: p300_single_gen2, volume: 200, labwareId: Opentrons 24 Tube Rack with Eppendorf 1.5 mL Safe-Lock Snapcap, wellName: A3, wellLocation: {origin: bottom, offset: {z: 3, x: 0, y: 0}}, flowRate: 200}
- moveToAddressableAreaForDropTip: {pipetteId: p300_single_gen2, addressableAreaName: fixedTrash, offset: {x: 0, y: 0, z: 0}, alternateDropLocation: true}
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